PsychoPy2experiment version="2023.1.3"
Settings
  Audio latency priority = 0
  Audio lib = pygame
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2023.1.3
  Window size (pixels) = [1600, 900]
  expName = Solo Project.trial 6
  keyboardBackend = Pyglet
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = 1.0000, 0.4275, 0.5137
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent target
      fillColor = 1.0000, -1.0000, -1.0000
      ori = randint(1,360)
      pos = (random()-0.5, random()-0.5)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    PolygonComponent target2
      fillColor = 1.0000, -0.8431, 0.1529
      ori = randint(1,360)
      pos = (random()-0.5, random()-0.5)
      shape = triangle
      size = (0.1,0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    PolygonComponent target3
      fillColor = -1.0000, -0.2157, -1.0000
      ori = randint(1,360)
      pos = (random()-0.5, random()-0.5)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 3.0
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    PolygonComponent target4
      fillColor = -1.0000, -1.0000, 0.0902
      ori = randint(1,360)
      pos = (random()-0.5, random()-0.5)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    PolygonComponent target5
      fillColor = 1.0000, 0.2941, -1.0000
      ori = randint(1,360)
      pos = (random()-0.5, random()-0.5)
      shape = triangle
      size = (0.1,0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    PolygonComponent target6
      fillColor = 1.0000, 1.0000, -1.0000
      ori = randint(1,360)
      pos = (random()-0.5, random()-0.5)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 3.0
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    PolygonComponent distr
      fillColor = 1.0000, 1.0000, 1.0000
      ori = randint(1,360)
      pos = (random()-0.5, random()-0.5)
      shape = arrow
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if random() > 0.5:
            num_distr = 100
            thisExp.addData('num_distr', num_distr)
        else:
            num_distr = 150
            thisExp.addData('num_distr', num_distr)
        distractors = []

        for i in range(num_distr):

            distr = visual.ShapeStim(
            win=win, name='distr', vertices='arrow',
            size=(0.1, 0.1),
            ori=randint(1,360), pos=(random()-0.5, random()-0.5), anchor='center',
            lineWidth=1.0,     colorSpace='rgb',  lineColor='white', fillColor='white',
            opacity=None, depth=-2.0, interpolate=True)


            distractors.append(distr)


        for distr in distractors:
            distr.setAutoDraw(True)
      End Routine:
        for distr in distractors:
            distr.setAutoDraw(False)
    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
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  Routine MemoryProbe
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = Please describe the color of the target you just saw, and remeber.
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    KeyboardComponent key_resp
      allowedKeys = 'b','g','p','r','y','o'
      correctAns = $target
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Instructions
    TextComponent instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Welcome to the Experiment on Divided Attention and Memory!

        In this experiment, you will be presented with visual stimuli on the screen. Your task is to pay attention to specific information while ignoring distractors. Later, you will be asked to recall the important information.
Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 20
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    Routine trial
    Routine MemoryProbe
  LoopTerminator trials
